CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Add images into this section when using the GUI to test segmentation parameters. Remove prior to exporting as a cppipe file and before using in command line.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-H]{1}[0-9]{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign channels to names.', '', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith ".tiff")
    Name to assign these images:OP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith ".png")
    Name to assign these images:Mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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notes:['Group by plate to run independently of each other.']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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['This module converts the imported binary mask images into objects to extract information from.']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
    Select the input image:Mask
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureImageIntensity:[module_num:6|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notes:['This is set to measure intensity for the whole image.']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
    Select images to measure:OP
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectNeighbors:[module_num:7|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notes:['This measures adjacent object neighbors.']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
    Select objects to measure:ConvertImageToObjects
    Select neighboring objects to measure:ConvertImageToObjects
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:8|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notes:['This measures the size and shape (among other measurements) for the objects.']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
    Select object sets to measure:ConvertImageToObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

ExportToDatabase:[module_num:9|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notes:['This module outputs an sqlite file with all of the image and bone features.']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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|Documents/Nichols_Lab_Collaboration/data/3.sqlite_output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:output.sqlite
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:OP
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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